CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Exact match
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|.
    Check image sets for missing or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):AP323-3_w1Phase
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:bf
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):AP323-3_w2YFPCube
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    Extract metadata from where?:None
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:yfp
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    Rescale intensities?:Yes

ImageMath:[module_num:2|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:inverted
    Image or measurement?:Image
    Select the first image:bf
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:3|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
    Select the input image:inverted
    Name the output image:CorrInv
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
IdentifyPrimaryObjects:[module_num:4|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
    Select the input image:CorrInv
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:RobustBackground Adaptive
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Yes
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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
EnhanceOrSuppressFeatures:[module_num:5|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
    Select the input image:yfp
    Name the output image:CorrCfp
    Select the operation:Enhance
    Feature size:3
    Feature type:Circles
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
Crop:[module_num:6|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
    Select the input image:CorrCfp
    Name the output image:CropCFP
    Select the cropping shape:Objects
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    Remove empty rows and columns?:No
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    Select the objects:cells

MeasureObjectIntensity:[module_num:7|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
    Hidden:1
    Select an image to measure:CropCFP
    Select objects to measure:cells

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CropCFP
    Name the primary objects to be identified:foci
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Select the thresholding method:RobustBackground PerObject
    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:peaks
    Fill holes in identified objects?:Yes
    Automatically calculate size of smoothing filter?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
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    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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
OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:inverted
    Name the output image:OrigOverlay
    Select outline display mode:Color
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    Width of outlines:1
    Select outlines to display:peaks
    Select outline color:Red

RelateObjects:[module_num:10|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
    Select the input child objects:foci
    Select the input parent objects:cells
    Calculate distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
DisplayDataOnImage:[module_num:11|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
    Display object or image measurements?:Object
    Select the input objects:foci
    Measurement to display:Location_Center_X
    Select the image on which to display the measurements:inverted
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image

MeasureObjectIntensity:[module_num:12|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
    Hidden:1
    Select an image to measure:CropCFP
    Select objects to measure:foci

MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:cells
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:14|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:Yes
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
DisplayDataOnImage:[module_num:15|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
    Display object or image measurements?:Object
    Select the input objects:foci
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:inverted
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):1
    Number of decimals:1
    Image elements to save:Image
