CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.', '---', 'Settings converted from legacy pipeline.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '---', 'Settings converted from legacy pipeline.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Settings converted from legacy pipeline.', 'Please change any color images from "Load as Grayscale image" to "Load as Color image"']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does contain "AP323-3_w1Phase")
    Name to assign these images:bf
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "AP323-3_w2YFPCube")
    Name to assign these images:yfp
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '---', 'Settings converted from legacy pipeline.']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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:inverted
    Image or measurement?:Image
    Select the first image:bf
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:inverted
    Name the output image:CorrInv
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:CorrInv
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Adaptive
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Method to calculate adaptive window size:Image size
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:yfp
    Name the output image:CorrCfp
    Select the operation:Enhance
    Feature size:3
    Feature type:Circles
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
Crop:[module_num:9|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
    Select the input image:CorrCfp
    Name the output image:CropCFP
    Select the cropping shape:Objects
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    Remove empty rows and columns?:No
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    Select the objects:cells

MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:CropCFP
    Select objects to measure:cells

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:CropCFP
    Name the primary objects to be identified:foci
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:peaks
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Per object
    Thresholding method:RobustBackground
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
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    Masking objects:From image
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:inverted
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
    Select outlines to display:peaks
    Select outline color:Red
    Load outlines from an image or objects?:Image
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
RelateObjects:[module_num:13|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
    Select the input child objects:foci
    Select the input parent objects:cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
DisplayDataOnImage:[module_num:14|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
    Display object or image measurements?:Object
    Select the input objects:foci
    Measurement to display:Location_Center_X
    Select the image on which to display the measurements:inverted
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes

MeasureObjectIntensity:[module_num:15|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
    Hidden:1
    Select an image to measure:CropCFP
    Select objects to measure:foci

MeasureObjectSizeShape:[module_num:16|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
    Select objects to measure:cells
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
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
DisplayDataOnImage:[module_num:18|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
    Display object or image measurements?:Object
    Select the input objects:foci
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:inverted
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):1
    Number of decimals:1
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
