CellProfiler Pipeline: http://www.cellprofiler.org
Version:1
SVNRevision:11710

LoadImages:[module_num:1|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
    File type to be loaded:individual images
    File selection method:Text-Regular expressions
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    Analyze all subfolders within the selected folder?:None
    Input image file location:Default Input Folder|Dropbox/optogenetics/microscopy/scope_data/2013-08-02-X1/X1-new-YFP-settings
    Check image sets for missing or duplicate files?:No
    Group images by metadata?:No
    Exclude certain files?:No
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    Image count:2
    Text that these images have in common (case-sensitive):w1Phase
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<Strain>[A-Z][0-9]).(?P<TP>.*)-(?P<ImageNum>.*)_w1Phase.TIF
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:bf
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    Rescale intensities?:Yes
    Text that these images have in common (case-sensitive):w3YFPCube
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    Extract metadata from where?:File name
    Regular expression that finds metadata in the file name:^(?P<Strain>[A-Z][0-9]).(?P<TP>.*)-(?P<ImageNum>.*)_w3YFPCube.TIF
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    Channel count:1
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    Load the input as images or objects?:Images
    Name this loaded image:yfp
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    Rescale intensities?:No

ImageMath:[module_num:2|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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:bf_inverted
    Image or measurement?:Image
    Select the first image:bf
    Multiply the first image by:1
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    Image or measurement?:Image
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
SaveImages:[module_num:3|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
    Select the type of image to save:Image
    Select the image to save:bf_inverted
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    Select method for constructing file names:From image filename
    Select image name for file prefix:bf
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    Do you want to add a suffix to the image file name?:Yes
    Text to append to the image name:_inverted
    Select file format to use:tiff
    Output file location:Default Output Folder sub-folder|inverted
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    Select how often to save:Every cycle
    Rescale the images? :No
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    Store file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No

EnhanceOrSuppressFeatures:[module_num:4|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
    Select the input image:bf_inverted
    Name the output image:CorrInv
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:CorrInv
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):7,40
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Select the thresholding method:RobustBackground Adaptive
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0011,1.0
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    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:Yes
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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
MeasureObjectSizeShape:[module_num:6|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
    Select objects to measure:cells
    Calculate the Zernike features?:Yes

MeasureObjectNeighbors:[module_num:7|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
    Select objects to measure:cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors for use later in the pipeline (for example, in SaveImages)?:No
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    Retain the image of objects colored by percent of touching pixels for use later in the pipeline (for example, in SaveImages)?:No
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
MeasureObjectIntensity:[module_num:8|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
    Hidden:1
    Select an image to measure:yfp
    Select objects to measure:cells

DisplayDataOnImage:[module_num:9|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
    Display object or image measurements?:Object
    Select the input objects:cells
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:bf_inverted
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image

ExportToSpreadsheet:[module_num:10|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
    Select or enter the column delimiter:Comma (",")
    Prepend the output file name to the data file names?:Yes
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the columns of measurements to export?:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Documents/Bio Research/Image Analysis/X1
    Create a GenePattern GCT file?:No
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    Export all measurements, using default file names?:Yes
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
ExportToDatabase:[module_num:11|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|Documents/Bio Research/Image Analysis/X1
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:segmentation_output.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:cells
    Maximum # of characters in a column name:64
    Create one table per object or a single object table?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
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    Include information for all images, using default values?:No
    Hidden:1
    Hidden:1
    Hidden:0
    Select an image to include:bf_inverted
    Use the image name for the display?:Yes
    Image name:Channel1
    Channel color:gray
    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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